PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  End Message = Thank you. You may close this window.
  Experiment info = {'participant': 'test001', 'condition': 'sparse_probe'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['conditions/two_orientations.csv', 'conditions/quest_conditions.csv']
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = confidence_probe
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        Welcome.

        Press SPACE to begin.
    KeyboardComponent welcome_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine consent
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    TextComponent consent_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        INFORMATION AND CONSENT

        This study asks you to judge the tilt of brief striped patches using the keyboard. It lasts about 20-30 minutes. Participation is voluntary and you may stop at any time by pressing ESCAPE. No identifying information is collected.

        [Replace with the ethics-approved participant information and consent text.]

        Press SPACE to give consent and continue.
    KeyboardComponent consent_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        On each trial, you will see a striped patch tilted in one of two directions.

        Press F for a left-tilted patch.
        Press J for a right-tilted patch.

        Respond as accurately as possible. If you are unsure, make your best guess.
        Keep your index fingers on F and J throughout the task.

        Press SPACE to continue.
    KeyboardComponent instructions_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine initialize
    RoutineSettingsComponent initialize
      stopVal [duration (s)] = 0.05
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    TextComponent init_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.05
      text = +
      wrapWidth = 1.4
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    CodeComponent init_code
      Code Type = Both
      Before Experiment:
        def median_value(values):
            ordered = sorted(values)
            n = len(ordered)
            if n == 0:
                return 8.0
            middle = n // 2
            if n % 2 == 1:
                return float(ordered[middle])
            return float((ordered[middle - 1] + ordered[middle]) / 2.0)
      Before JS Experiment:
        var probeCondition = "";
        var probeSchedule = [];
        var globalTrialN = 0;
        var questLevels = [];
        var tiltDeg = 8.0;
        var probeThisTrial = 0;
        var trialIndex = -1;
        var choiceMade = 0;
        var confidenceMade = 0;
        var showConfInstr = 0;
        var showNeutralInstr = 1;
        var feedbackText = "";
        var feedbackColor = "#ffdc00";
        var blockText = "";
        var breakText = "";
        var FINISHED = PsychoJS.Status.FINISHED;  // used in the conditional start of *_wait_fix
        var calibTiltSign = 1;
        var calibCorrAns = "j";

        function shuffledCopy(values) {
            let output = values.slice();
            for (let i = output.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                const temporary = output[i];
                output[i] = output[j];
                output[j] = temporary;
            }
            return output;
        }

        function medianValue(values) {
            let ordered = values.slice().sort((a, b) => a - b);
            let n = ordered.length;
            if (n === 0) {
                return 8.0;
            }
            let middle = Math.floor(n / 2);
            if (n % 2 === 1) {
                return Number(ordered[middle]);
            }
            return Number((ordered[middle - 1] + ordered[middle]) / 2.0);
        }
      Begin Experiment:
        probeCondition = str(expInfo['condition']).strip().lower()
        validConditions = ['no_probe', 'sparse_probe', 'full_probe']
        if probeCondition not in validConditions:
            raise ValueError('condition must be no_probe, sparse_probe, or full_probe')

        probeSchedule = []
        for blockN in range(4):
            oneBlock = [1] * 10 + [0] * 30
            shuffle(oneBlock)
            probeSchedule.extend(oneBlock)

        showConfInstr = int(probeCondition != 'no_probe')
        showNeutralInstr = 1 - showConfInstr
        globalTrialN = 0
        questLevels = []
        tiltDeg = 8.0
        probeThisTrial = 0
        trialIndex = -1
        choiceMade = 0
        confidenceMade = 0
        thisExp.addData('probeScheduleString', ''.join(str(p) for p in probeSchedule))
      Begin JS Experiment:
        probeCondition = String(expInfo['condition']).trim().toLowerCase();
        let validConditions = ['no_probe', 'sparse_probe', 'full_probe'];
        if (!validConditions.includes(probeCondition)) {
            throw new Error('condition must be no_probe, sparse_probe, or full_probe');
        }

        probeSchedule = [];
        for (let blockN = 0; blockN < 4; blockN++) {
            let oneBlock = Array(10).fill(1).concat(Array(30).fill(0));
            oneBlock = shuffledCopy(oneBlock);
            probeSchedule = probeSchedule.concat(oneBlock);
        }

        showConfInstr = (probeCondition !== 'no_probe') ? 1 : 0;
        showNeutralInstr = 1 - showConfInstr;
        psychoJS.experiment.addData('probeScheduleString', probeSchedule.join(''));
  Routine confidence_instructions
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    TextComponent confidence_instructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        On some trials, you will also be asked how confident you are that your choice was correct.

        Use keys 1-6:
        1 means you were guessing.
        6 means you were very certain.

        Use the entire scale when appropriate. Confidence is about the choice you just made, not your general ability.

        Press SPACE to continue.
    KeyboardComponent confidence_instructions_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine neutral_instructions
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    TextComponent neutral_instructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        After each decision, a fixation cross may remain on the screen briefly. Keep looking at the cross until the next patch appears.

        Press SPACE to continue.
    KeyboardComponent neutral_instructions_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine practice_intro
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    TextComponent practice_intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        Practice: the patch is clearly tilted and you will get feedback.

        Press SPACE to start.
    KeyboardComponent practice_intro_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine practice_fixation
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    TextComponent practice_fixation_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
      wrapWidth = 1.4
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  Routine practice_decision
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    GratingComponent practice_gabor
      contrast = 0.8
      mask = gauss
      ori [set every repeat] = tiltSign * 12
      sf = 4
      size = (0.18, 0.18)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.15
      tex = sin
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    TextComponent practice_wait_fix
      letterHeight = 0.05
      startVal [condition] = practice_gabor.status == FINISHED
      stopVal [time (s)] = 1.5
      text = +
      wrapWidth = 1.4
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    KeyboardComponent practice_resp
      allowedKeys = ['f', 'j']
      correctAns [set every repeat] = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent practice_minexposure
      Code Type = Both
      Each Frame:
        if practice_resp.keys and t >= 0.15:
            continueRoutine = False
      Each JS Frame:
        if (practice_resp.keys !== undefined && practice_resp.keys !== null && practice_resp.keys.length > 0 && t >= 0.15) {
            continueRoutine = false;
        }
    CodeComponent practice_end
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData('phase', 'practice');
      End Routine:
        thisExp.addData('phase', 'practice')
  Routine practice_feedback
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    CodeComponent practice_feedback_code
      Code Type = Both
      Begin JS Routine:
        if (practice_resp.keys === undefined || practice_resp.keys === null || practice_resp.keys.length === 0) {
            feedbackText = 'Too slow';
            feedbackColor = '#ffdc00';
        } else if (practice_resp.corr === 1) {
            feedbackText = 'Correct';
            feedbackColor = '#2ecc40';
        } else {
            feedbackText = 'Incorrect';
            feedbackColor = '#ff4136';
        }
      Begin Routine:
        if not practice_resp.keys:
            feedbackText = 'Too slow'
            feedbackColor = '#ffdc00'
        elif practice_resp.corr == 1:
            feedbackText = 'Correct'
            feedbackColor = '#2ecc40'
        else:
            feedbackText = 'Incorrect'
            feedbackColor = '#ff4136'
    TextComponent practice_feedback_text
      color [set every repeat] = $feedbackColor
      letterHeight = 0.06
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $feedbackText
      wrapWidth = 1.4
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  Routine practice_iti
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    TextComponent practice_iti_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
      wrapWidth = 1.4
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  Routine calibration_intro
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    TextComponent calibration_intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        Calibration: the patch will get harder to see. No feedback now. Keep responding as accurately as you can.

        Press SPACE to start.
    KeyboardComponent calibration_intro_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine calibration_fixation
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    TextComponent calibration_fixation_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
      wrapWidth = 1.4
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  Routine calibration_decision
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    CodeComponent calibration_setup
      Code Type = Both
      Begin JS Routine:
        if (Math.random() < 0.5) {
            calibTiltSign = -1;
            calibCorrAns = 'f';
        } else {
            calibTiltSign = 1;
            calibCorrAns = 'j';
        }
      Begin Routine:
        if random() < 0.5:
            calibTiltSign = -1
            calibCorrAns = 'f'
        else:
            calibTiltSign = 1
            calibCorrAns = 'j'
    GratingComponent calibration_gabor
      contrast = 0.8
      mask = gauss
      ori [set every repeat] = calibTiltSign * level
      sf = 4
      size = (0.18, 0.18)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.15
      tex = sin
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    TextComponent calibration_wait_fix
      letterHeight = 0.05
      startVal [condition] = calibration_gabor.status == FINISHED
      stopVal [time (s)] = 1.5
      text = +
      wrapWidth = 1.4
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    KeyboardComponent calibration_resp
      allowedKeys = ['f', 'j']
      correctAns [set every repeat] = $calibCorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent calibration_minexposure
      Code Type = Both
      Each Frame:
        if calibration_resp.keys and t >= 0.15:
            continueRoutine = False
      Each JS Frame:
        if (calibration_resp.keys !== undefined && calibration_resp.keys !== null && calibration_resp.keys.length > 0 && t >= 0.15) {
            continueRoutine = false;
        }
    CodeComponent calibration_end
      Code Type = Both
      End JS Routine:
        questLevels.push(Number(level));
        psychoJS.experiment.addData('phase', 'calibration');
        psychoJS.experiment.addData('tiltSignUsed', calibTiltSign);
        psychoJS.experiment.addData('corrAns', calibCorrAns);
      End Routine:
        questLevels.append(float(level))
        thisExp.addData('phase', 'calibration')
        thisExp.addData('tiltSignUsed', calibTiltSign)
        thisExp.addData('corrAns', calibCorrAns)
  Routine calibration_iti
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    TextComponent calibration_iti_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
      wrapWidth = 1.4
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  Routine calibration_summary
    RoutineSettingsComponent calibration_summary
      stopVal [duration (s)] = 0.5
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    CodeComponent calibration_summary_code
      Code Type = Both
      Begin JS Routine:
        let lastLevels = questLevels.slice(-10);
        tiltDeg = medianValue(lastLevels);
        tiltDeg = Math.min(Math.max(tiltDeg, 1.0), 15.0);
        psychoJS.experiment.addData('calibratedTiltDeg', tiltDeg);
        psychoJS.experiment.addData('calibrationAtBoundary', (tiltDeg <= 1.0 || tiltDeg >= 15.0) ? 1 : 0);
      Begin Routine:
        lastLevels = questLevels[-10:]
        tiltDeg = median_value(lastLevels)
        tiltDeg = min(max(tiltDeg, 1.0), 15.0)
        thisExp.addData('calibratedTiltDeg', tiltDeg)
        thisExp.addData('calibrationAtBoundary', int(tiltDeg <= 1.0 or tiltDeg >= 15.0))
    TextComponent calibration_done_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = Calibration complete
      wrapWidth = 1.4
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  Routine baseline_intro
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    TextComponent baseline_intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        Next part. No confidence reports in this part.

        Press SPACE to start.
    KeyboardComponent baseline_intro_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine baseline_fixation
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    TextComponent baseline_fixation_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
      wrapWidth = 1.4
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  Routine baseline_decision
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    GratingComponent baseline_gabor
      contrast = 0.8
      mask = gauss
      ori [set every repeat] = tiltSign * tiltDeg
      sf = 4
      size = (0.18, 0.18)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.15
      tex = sin
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    TextComponent baseline_wait_fix
      letterHeight = 0.05
      startVal [condition] = baseline_gabor.status == FINISHED
      stopVal [time (s)] = 1.5
      text = +
      wrapWidth = 1.4
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    KeyboardComponent baseline_resp
      allowedKeys = ['f', 'j']
      correctAns [set every repeat] = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent baseline_minexposure
      Code Type = Both
      Each Frame:
        if baseline_resp.keys and t >= 0.15:
            continueRoutine = False
      Each JS Frame:
        if (baseline_resp.keys !== undefined && baseline_resp.keys !== null && baseline_resp.keys.length > 0 && t >= 0.15) {
            continueRoutine = false;
        }
    CodeComponent baseline_end
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData('phase', 'baseline');

        psychoJS.experiment.addData('tiltDegUsed', tiltDeg);
        psychoJS.experiment.addData('probeScheduled', 0);
      End Routine:
        thisExp.addData('phase', 'baseline')

        thisExp.addData('tiltDegUsed', tiltDeg)
        thisExp.addData('probeScheduled', 0)
  Routine baseline_post
    RoutineSettingsComponent baseline_post
      stopVal [duration (s)] = 1.5
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    TextComponent baseline_post_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = +
      wrapWidth = 1.4
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  Routine baseline_iti
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    TextComponent baseline_iti_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
      wrapWidth = 1.4
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  Routine main_intro
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    TextComponent main_intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        Main task. Remember: F = left tilt, J = right tilt.

        Press SPACE to start.
    KeyboardComponent main_intro_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine block_intro
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    CodeComponent block_intro_code
      Code Type = Both
      Begin JS Routine:
        blockText = 'Block ' + String(mainBlocks.thisN + 1) + ' of 4\n\nPress SPACE when you are ready.';
      Begin Routine:
        blockText = 'Block ' + str(mainBlocks.thisN + 1) + ' of 4\n\nPress SPACE when you are ready.'
    TextComponent block_intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      text [set every repeat] = $blockText
      wrapWidth = 1.4
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    KeyboardComponent block_intro_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine main_fixation
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    TextComponent main_fixation_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
      wrapWidth = 1.4
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  Routine main_decision
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    CodeComponent main_setup
      Code Type = Both
      Begin JS Routine:
        trialIndex = globalTrialN;

        if (probeCondition === 'full_probe') {
            probeThisTrial = 1;
        } else if (probeCondition === 'sparse_probe') {
            probeThisTrial = Number(probeSchedule[trialIndex]);
        } else {
            probeThisTrial = 0;
        }
      Begin Routine:
        trialIndex = globalTrialN

        if probeCondition == 'full_probe':
            probeThisTrial = 1
        elif probeCondition == 'sparse_probe':
            probeThisTrial = int(probeSchedule[trialIndex])
        else:
            probeThisTrial = 0
    GratingComponent main_gabor
      contrast = 0.8
      mask = gauss
      ori [set every repeat] = tiltSign * tiltDeg
      sf = 4
      size = (0.18, 0.18)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.15
      tex = sin
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    TextComponent main_wait_fix
      letterHeight = 0.05
      startVal [condition] = main_gabor.status == FINISHED
      stopVal [time (s)] = 1.5
      text = +
      wrapWidth = 1.4
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    KeyboardComponent main_resp
      allowedKeys = ['f', 'j']
      correctAns [set every repeat] = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent main_minexposure
      Code Type = Both
      Each Frame:
        if main_resp.keys and t >= 0.15:
            continueRoutine = False
      Each JS Frame:
        if (main_resp.keys !== undefined && main_resp.keys !== null && main_resp.keys.length > 0 && t >= 0.15) {
            continueRoutine = false;
        }
    CodeComponent main_end
      Code Type = Both
      End JS Routine:
        choiceMade = (
            main_resp.keys !== undefined &&
            main_resp.keys !== null &&
            main_resp.keys.length > 0
        ) ? 1 : 0;
        let probeOriginallyScheduled = probeThisTrial;
        if (choiceMade === 0) {
            probeThisTrial = 0;
        }

        psychoJS.experiment.addData('phase', 'main');
        psychoJS.experiment.addData('trialIndex', trialIndex);
        psychoJS.experiment.addData('blockIndex', mainBlocks.thisN);
        psychoJS.experiment.addData('trialInBlock', mainTrials.thisN);
        psychoJS.experiment.addData('tiltDegUsed', tiltDeg);
        psychoJS.experiment.addData('tiltSignUsed', tiltSign);
        psychoJS.experiment.addData('probeOriginallyScheduled', probeOriginallyScheduled);
        psychoJS.experiment.addData('probeScheduled', probeThisTrial);
        psychoJS.experiment.addData('choiceMade', choiceMade);

        globalTrialN += 1;
      End Routine:
        choiceMade = 1 if main_resp.keys else 0
        probeOriginallyScheduled = probeThisTrial
        if choiceMade == 0:
            probeThisTrial = 0

        thisExp.addData('phase', 'main')
        thisExp.addData('trialIndex', trialIndex)
        thisExp.addData('blockIndex', mainBlocks.thisN)
        thisExp.addData('trialInBlock', mainTrials.thisN)
        thisExp.addData('tiltDegUsed', tiltDeg)
        thisExp.addData('tiltSignUsed', tiltSign)
        thisExp.addData('probeOriginallyScheduled', probeOriginallyScheduled)
        thisExp.addData('probeScheduled', probeThisTrial)
        thisExp.addData('choiceMade', choiceMade)

        globalTrialN += 1
  Routine main_post
    RoutineSettingsComponent main_post
      stopVal [duration (s)] = 1.5
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    TextComponent post_fix
      letterHeight = 0.05
      startVal [condition] = probeThisTrial == 0
      stopVal [duration (s)] = 1.5
      text = +
      wrapWidth = 1.4
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    TextComponent confidence_prompt
      letterHeight = 0.04
      startVal [condition] = probeThisTrial == 1
      stopVal [duration (s)] = 1.5
      wrapWidth = 1.4
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      text:
        How confident are you that your choice was correct?

        1       2       3       4       5       6
        Guessing                                  Certain
    KeyboardComponent confidence_resp
      allowedKeys = ['1', '2', '3', '4', '5', '6']
      forceEndRoutine = False
      startVal [condition] = probeThisTrial == 1
      stopVal [duration (s)] = 1.5
      store = first key
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    CodeComponent post_end
      Code Type = Both
      End JS Routine:
        confidenceMade = (
            probeThisTrial === 1 &&
            confidence_resp.keys !== undefined &&
            confidence_resp.keys !== null &&
            confidence_resp.keys.length > 0
        ) ? 1 : 0;
        psychoJS.experiment.addData('confidenceRequested', probeThisTrial);
        psychoJS.experiment.addData('confidenceMade', confidenceMade);
      End Routine:
        confidenceMade = int(probeThisTrial == 1 and bool(confidence_resp.keys))
        thisExp.addData('confidenceRequested', probeThisTrial)
        thisExp.addData('confidenceMade', confidenceMade)
  Routine main_iti
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    TextComponent main_iti_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
      wrapWidth = 1.4
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  Routine block_break
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    CodeComponent block_break_code
      Code Type = Both
      Begin JS Routine:
        let blockNumber = mainBlocks.thisN + 1;
        if (blockNumber < 4) {
            breakText = 'End of block ' + String(blockNumber) +
                ' of 4.\n\nTake a short break. Press SPACE to continue.';
        } else {
            breakText = 'The main task is complete. Press SPACE to continue.';
        }
      Begin Routine:
        blockNumber = mainBlocks.thisN + 1
        if blockNumber < 4:
            breakText = ('End of block ' + str(blockNumber) + ' of 4.\n\n'
                         'Take a short break. Press SPACE to continue.')
        else:
            breakText = 'The main task is complete. Press SPACE to continue.'
    TextComponent block_break_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      text [set every repeat] = $breakText
      wrapWidth = 1.4
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    KeyboardComponent block_break_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine thanks
    RoutineSettingsComponent thanks
      stopVal [duration (s)] = 3
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    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text = The experiment is finished. Thank you!
      wrapWidth = 1.4
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Flow
  Routine welcome
  Routine consent
  Routine instructions
  Routine initialize
  LoopInitiator confidenceInstructionLoop loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = showConfInstr
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    Routine confidence_instructions
  LoopTerminator confidenceInstructionLoop
  LoopInitiator neutralInstructionLoop loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = showNeutralInstr
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    Routine neutral_instructions
  LoopTerminator neutralInstructionLoop
  Routine practice_intro
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = conditions/two_orientations.csv
    loopType = random
    nReps = 6
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    conditions:
      [OrderedDict([('tiltSign', np.int64(-1)), ('corrAns', 'f'), ('orientationLabel', 'left')]),
      OrderedDict([('tiltSign', np.int64(1)), ('corrAns', 'j'), ('orientationLabel', 'right')])]
    Routine practice_fixation
    Routine practice_decision
    Routine practice_feedback
    Routine practice_iti
  LoopTerminator practiceTrials
  Routine calibration_intro
  LoopInitiator calibrationTrials loopType="MultiStairHandler"
    conditions = []
    conditionsFile = conditions/quest_conditions.csv
    conditionsFile_QUEST = conditions/quest_conditions.csv
    conditionsFile_questplus = conditions/quest_conditions.csv
    conditionsFile_simple = conditions/quest_conditions.csv
    nReps = 40
    stairType = QUEST
    switchMethod = sequential
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    Routine calibration_fixation
    Routine calibration_decision
    Routine calibration_iti
  LoopTerminator calibrationTrials
  Routine calibration_summary
  Routine baseline_intro
  LoopInitiator baselineTrials loopType="TrialHandler"
    conditionsFile = conditions/two_orientations.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('tiltSign', np.int64(-1)), ('corrAns', 'f'), ('orientationLabel', 'left')]),
      OrderedDict([('tiltSign', np.int64(1)), ('corrAns', 'j'), ('orientationLabel', 'right')])]
    Routine baseline_fixation
    Routine baseline_decision
    Routine baseline_post
    Routine baseline_iti
  LoopTerminator baselineTrials
  Routine main_intro
  LoopInitiator mainBlocks loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = 4
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    Routine block_intro
    LoopInitiator mainTrials loopType="TrialHandler"
      conditionsFile = conditions/two_orientations.csv
      loopType = random
      nReps = 20
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      conditions:
        [OrderedDict([('tiltSign', np.int64(-1)), ('corrAns', 'f'), ('orientationLabel', 'left')]),
        OrderedDict([('tiltSign', np.int64(1)), ('corrAns', 'j'), ('orientationLabel', 'right')])]
      Routine main_fixation
      Routine main_decision
      Routine main_post
      Routine main_iti
    LoopTerminator mainTrials
    Routine block_break
  LoopTerminator mainBlocks
  Routine thanks
